PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1536, 864]
  expName = fox
  keyboardBackend = ioHub
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Routines
  Routine resp_1
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Are you interested in ad?

        1=YES  2=NO
    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
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    TextComponent text_2
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        fixDur=0
      Begin Routine:
        fixDur=5+2*random()
      End Routine:
        thisExp.addData("FixDur",fixDur)
  Routine begin
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    TextComponent instruct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the EEG study.

        You will watch 10 commercial videos. When you also see a cross (fixation), please just stare at it.

        Please minimize your movement during the study. Press "space bar" to begin the task.

        Thank you!
    KeyboardComponent key_resp_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = The study now ended. Thanks!!
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  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #from pylsl import StreamInfo, StreamOutlet
        #
        ## Define your LSL stream for sending markers
        #stream_name = 'PsychoPyMarkers'
        #stream_type = 'Markers'
        #n_channels = 1
        #info = StreamInfo(stream_name, stream_type, n_channels, 0, 'string', 'uniqueid12345')
        #outlet = StreamOutlet(info)

        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        #begin_routine()
        video_marker_code = loop.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)
  Routine show
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    MovieComponent tv_1
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $shows
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Define your LSL stream for sending markers
        stream_name = 'PsychoPyMarkers'
        stream_type = 'Markers'
        n_channels = 1
        info = StreamInfo(stream_name, stream_type, n_channels, 0, 'string', 'uniqueid12345')
        outlet = StreamOutlet(info)

        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])

        #def begin_routine():
        #    # Retrieve the current trial's marker
        #    video_marker_code = loop_shows.getCurrentTrial()['marker']
        ##    sendCode(video_marker_code)
        #    # Send the marker via LSL
        #    sendLSLMarker(video_marker_code)
      Begin Routine:
        #begin_routine()
        # Retrieve the current trial's marker
        video_marker_code = loop_shows.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)
  Routine show2
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    MovieComponent tv_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $shows
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        #from pylsl import StreamInfo, StreamOutlet
        #
        ## Define your LSL stream for sending markers
        #stream_name = 'PsychoPyMarkers'
        #stream_type = 'Markers'
        #n_channels = 1
        #info = StreamInfo(stream_name, stream_type, n_channels, 0, 'string', 'uniqueid12345')
        #outlet = StreamOutlet(info)

        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        #begin_routine()
        video_marker_code = loop_shows2.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)
  Routine trial2
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
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      Begin Routine:
        #begin_routine()
        video_marker_code = loop2.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)
Flow
  Routine begin
  Routine fix
  LoopInitiator loop_shows loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = lists_shows.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'shows': 'videos/LEGO_1.mp4', 'marker': 1},
      {'shows': 'videos/BigMood_1.mp4', 'marker': 1},
      {'shows': 'videos/AmericanPickers_1.mp4', 'marker': 1},
      {'shows': 'videos/CNN_1.mp4', 'marker': 1},
      {'shows': 'videos/Continental_1.mp4', 'marker': 1},
      {'shows': 'videos/FoxNews_1.mp4', 'marker': 1},
      {'shows': 'videos/NFL_1.mp4', 'marker': 1}]
    Routine show
  LoopTerminator loop_shows
  Routine fix
  LoopInitiator loop loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'videos': 'videos/burgerking.mp4', 'marker': 1},
      {'videos': 'videos/chevrolet.mp4', 'marker': 2},
      {'videos': 'videos/mounjaro.mp4', 'marker': 3},
      {'videos': 'videos/paramount.mp4', 'marker': 4},
      {'videos': 'videos/rakuten.mp4', 'marker': 5},
      {'videos': 'videos/redbull.mp4', 'marker': 6},
      {'videos': 'videos/samsung.mp4', 'marker': 7},
      {'videos': 'videos/tracfone.mp4', 'marker': 8}]
    Routine trial
    Routine fix
  LoopTerminator loop
  LoopInitiator loop_shows2 loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = lists_shows2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'shows': 'videos/LEGO_2.mp4', 'marker': 6},
      {'shows': 'videos/BigMood_2.mp4', 'marker': 6},
      {'shows': 'videos/AmericanPickers_2.mp4', 'marker': 6},
      {'shows': 'videos/CNN_2.mp4', 'marker': 6},
      {'shows': 'videos/Continental_2.mp4', 'marker': 6},
      {'shows': 'videos/FoxNews_2.mp4', 'marker': 6},
      {'shows': 'videos/NFL_2.mp4', 'marker': 6}]
    Routine show2
  LoopTerminator loop_shows2
  Routine fix
  LoopInitiator loop2 loopType="TrialHandler"
    Selected rows = 4:
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'videos': 'videos/burgerking.mp4', 'marker': 1},
      {'videos': 'videos/chevrolet.mp4', 'marker': 2},
      {'videos': 'videos/mounjaro.mp4', 'marker': 3},
      {'videos': 'videos/paramount.mp4', 'marker': 4},
      {'videos': 'videos/rakuten.mp4', 'marker': 5},
      {'videos': 'videos/redbull.mp4', 'marker': 6},
      {'videos': 'videos/samsung.mp4', 'marker': 7},
      {'videos': 'videos/tracfone.mp4', 'marker': 8}]
    Routine trial2
    Routine fix
  LoopTerminator loop2
  Routine end
