PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1280, 720]
  expName = fox-yt
  keyboardBackend = ioHub
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Routines
  Routine resp_1
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Are you interested in ad?

        1=YES  2=NO
    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
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    TextComponent text_2
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        fixDur=0
      Begin Routine:
        fixDur=5+2*random()
      End Routine:
        thisExp.addData("FixDur",fixDur)
  Routine begin
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    TextComponent instruct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the EEG study.

        You will watch the YouTube video with some commercial ads. You may skip the ad after 5 seconds if you want to.

        When you see a cross (fixation), please just stare at it.

        Please minimize your movement during the study. Press "space bar" to begin the task. Thank you!
    KeyboardComponent key_resp_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = The study now ended. Thanks!!
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  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #from pylsl import StreamInfo, StreamOutlet
        #
        ## Define your LSL stream for sending markers
        #stream_name = 'PsychoPyMarkers'
        #stream_type = 'Markers'
        #n_channels = 1
        #info = StreamInfo(stream_name, stream_type, n_channels, 0, 'string', 'uniqueid12345')
        #outlet = StreamOutlet(info)

        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        #begin_routine()
        video_marker_code = loop.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)

        # countdown timer
        countdown = core.CountdownTimer(start = 5)
      Each Frame:
        time_left = countdown.getTime()
        seconds = int(time_left)
    TextboxComponent textbox
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.075
      pos = (0.65,-0.65)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $f'{seconds}'
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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    TextComponent text_4
      letterHeight = 0.09
      pos = (0, 0.8)
      startVal [time (s)] = 5.0
      text = press space to skip this ad
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  Routine show
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    MovieComponent tv_1
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Define your LSL stream for sending markers
        stream_name = 'PsychoPyMarkers'
        stream_type = 'Markers'
        n_channels = 1
        info = StreamInfo(stream_name, stream_type, n_channels, 0, 'string', 'uniqueid12345')
        outlet = StreamOutlet(info)

        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])

        #def begin_routine():
        #    # Retrieve the current trial's marker
        #    video_marker_code = loop_shows.getCurrentTrial()['marker']
        ##    sendCode(video_marker_code)
        #    # Send the marker via LSL
        #    sendLSLMarker(video_marker_code)
      Begin Routine:
        #begin_routine()
        # Retrieve the current trial's marker
        video_marker_code = loop_shows.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)
  Routine show2
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    MovieComponent tv_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        #from pylsl import StreamInfo, StreamOutlet
        #
        ## Define your LSL stream for sending markers
        #stream_name = 'PsychoPyMarkers'
        #stream_type = 'Markers'
        #n_channels = 1
        #info = StreamInfo(stream_name, stream_type, n_channels, 0, 'string', 'uniqueid12345')
        #outlet = StreamOutlet(info)

        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        #begin_routine()
        video_marker_code = loop_shows2.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)
  Routine trial2
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
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      Begin Routine:
        #begin_routine()
        video_marker_code = loop2.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)

        countdown = core.CountdownTimer(start = 5)
      Each Frame:
        time_left = countdown.getTime()
        seconds = int(time_left)
    TextboxComponent textbox_2
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.075
      pos = (0.65,-0.65)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $f'{seconds}'
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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    TextComponent text_5
      letterHeight = 0.09
      pos = (0, 0.8)
      startVal [time (s)] = 5.0
      text = press space to skip this ad
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  Routine show3
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    MovieComponent tv_3
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
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      Begin Experiment:
        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        video_marker_code = loop_shows3.getCurrentTrial()['marker']
        sendLSLMarker(video_marker_code)
  Routine trial3
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      Begin Experiment:
        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        #begin_routine()
        video_marker_code = loop3.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)

        countdown = core.CountdownTimer(start = 5)
      Each Frame:
        time_left = countdown.getTime()
        seconds = int(time_left)
    TextboxComponent textbox_3
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.075
      pos = (0.65, -0.65)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $f'{seconds}'
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent text_6
      letterHeight = 0.09
      pos = (0, 0.8)
      startVal [time (s)] = 5
      text = press space to skip this ad
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  Routine show4
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    MovieComponent tv_4
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      Begin Experiment:
        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        video_marker_code = loop_shows4.getCurrentTrial()['marker']
        sendLSLMarker(video_marker_code)
  Routine trial4
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    MovieComponent movie_4
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
      Begin Experiment:
        def sendLSLMarker(marker):
            # Convert the marker to string (if not already) and send as an LSL marker
            outlet.push_sample([str(marker)])
      Begin Routine:
        #begin_routine()
        video_marker_code = loop4.getCurrentTrial()['marker']
        # Send the marker via LSL
        sendLSLMarker(video_marker_code)

        countdown = core.CountdownTimer(start = 5)
      Each Frame:
        time_left = countdown.getTime()
        seconds = int(time_left)
    TextboxComponent textbox_4
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.075
      pos = (0.65, -0.65)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $f'{seconds}'
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent text_7
      letterHeight = 0.09
      pos = (0, 0.8)
      startVal [time (s)] = 5
      text = press space to skip this ad
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Flow
  Routine begin
  Routine fix
  LoopInitiator loop_shows loopType="TrialHandler"
    Selected rows = 8
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'videos': 'videos/burgerking.mp4', 'marker': 1},
      {'videos': 'videos/chevrolet.mp4', 'marker': 2},
      {'videos': 'videos/mounjaro.mp4', 'marker': 3},
      {'videos': 'videos/paramount.mp4', 'marker': 4},
      {'videos': 'videos/rakuten.mp4', 'marker': 5},
      {'videos': 'videos/redbull.mp4', 'marker': 6},
      {'videos': 'videos/samsung.mp4', 'marker': 7},
      {'videos': 'videos/tracfone.mp4', 'marker': 8},
      {'videos': 'videos/ted_1.mp4', 'marker': 9},
      {'videos': 'videos/ted_2.mp4', 'marker': 10},
      {'videos': 'videos/ted_3.mp4', 'marker': 11},
      {'videos': 'videos/ted_3.mp4', 'marker': 12}]
    Routine show
  LoopTerminator loop_shows
  Routine fix
  LoopInitiator loop loopType="TrialHandler"
    Selected rows = 0,1
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'videos': 'videos/burgerking.mp4', 'marker': 1},
      {'videos': 'videos/chevrolet.mp4', 'marker': 2},
      {'videos': 'videos/mounjaro.mp4', 'marker': 3},
      {'videos': 'videos/paramount.mp4', 'marker': 4},
      {'videos': 'videos/rakuten.mp4', 'marker': 5},
      {'videos': 'videos/redbull.mp4', 'marker': 6},
      {'videos': 'videos/samsung.mp4', 'marker': 7},
      {'videos': 'videos/tracfone.mp4', 'marker': 8},
      {'videos': 'videos/ted_1.mp4', 'marker': 9},
      {'videos': 'videos/ted_2.mp4', 'marker': 10},
      {'videos': 'videos/ted_3.mp4', 'marker': 11},
      {'videos': 'videos/ted_3.mp4', 'marker': 12}]
    Routine trial
    Routine fix
  LoopTerminator loop
  LoopInitiator loop_shows2 loopType="TrialHandler"
    Selected rows = 9
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine show2
  LoopTerminator loop_shows2
  Routine fix
  LoopInitiator loop2 loopType="TrialHandler"
    Selected rows = 2,3
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine trial2
    Routine fix
  LoopTerminator loop2
  LoopInitiator loop_shows3 loopType="TrialHandler"
    Selected rows = 10
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine show3
  LoopTerminator loop_shows3
  Routine fix
  LoopInitiator loop3 loopType="TrialHandler"
    Selected rows = 4,5
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine trial3
    Routine fix
  LoopTerminator loop3
  LoopInitiator loop_shows4 loopType="TrialHandler"
    Selected rows = 11
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine show4
  LoopTerminator loop_shows4
  Routine fix
  LoopInitiator loop4 loopType="TrialHandler"
    Selected rows = 6,7
    conditionsFile = lists.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine trial4
    Routine fix
  LoopTerminator loop4
  Routine end
